OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Anthony Lin
0x9f5c4075 = WAP Training -- Train CSP
Comment
  Step 1: Change "Filename" to the
  EEG data just recorded from Acquisition
  (i.e. Kyl014_Trn1.ov)
Comment
  WAP Team -- Oct 16 2013
  WAP Training -- Train CSP

  Used to train the CSP based on the data taken from Acquisition
Comment
  Step 2: Change "Spatial filter configuration" to
  where you want to save your CSP
  (i.e. Kyl014_Trn1_6D_CSP.cfg)
Comment
  Step 3: Run scenario and fast-forward

Generic stream reader => #0
  Filename = C:/Users/seidi/Documents/GitHub/real-time-bmi/test_data/16ch_mi_hands.ov
#0.Output stream 2 -> Channel Selector
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Index
-> Signal Decimation
  Decimation factor = 4
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
Input stream 1=#3, Input stream 2=#0.Output stream 3 -> Identity => #4
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Left Trials" => #5
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation 1 = OVTK_GDF_Left
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Right Trials" => #6
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation 1 = OVTK_GDF_Right
Stimulations=#4.Output stream 2, Signal condition 1=#5, Signal condition 2=#6 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = C:/Users/seidi/Documents/GitHub/real-time-bmi/mi processing v1/csp.cfg
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
