OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Step 1: Change "Filename" to the
  data just recorded from Acquisition
  (i.e. Kyl014_Trn1.csv)
Comment
  WAP Team -- May 2023
  WAP Training -- Train Classifier

  Used to train the classifier based on the data taken from Acquisition
Comment
  Step 2: Change "Spatial filter configuration" to
  the CSP just saved from Train CSP
  (i.e. Kyl014_Trn1_6D_CSP.cfg)
Comment
  Step 3: Change "Filename to save the configuration to"
  to where you want to save your LDA classifier
  (i.e. Kyl014_Trn1_LDA.cfg)
Comment
  Step 4: Run scenario and fast-forward
Settings
  Setting 1 = 0

CSV File Reader => #0
  Filename = C:/Users/Laboratorio/Desktop/motor_mi_AL106_online_6a.csv
#0.Output stream -> Channel Selector
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Index
-> Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
Input stream 1=#2, Input stream 2=#0.Output stimulation -> Identity => #3
#3.Output stream 1 -> CSP Spatial Filter => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Path_Save}/${Experiment}_${Participant}_Sess${Session_nb}_csp.cfg
Input signal=#4, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Left Trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Signal Power Log
-> Feature aggregator => #8
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Right Trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation 1 = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Signal Power Log
-> Feature aggregator => #12
Stimulations=#3.Output stream 2, Features for class 1=#8, Features for class 2=#12 -> Classifier trainer
  Train trigger = OVTK_GDF_End_Of_Session
  Filename to save configuration to = ${Path_Save}/${Experiment}_${Participant}_Sess${Session_nb}_lda.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Linear
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
