OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Step 1: Change "Filename" to the
  EEG data recorded from Acquisition
  (i.e. Kyl014_Trn1.ov)
Comment
  WAP Team -- May 2023
  WAP Training -- Replay

  Optional: Used to view the LDA classifier and confusion matrix of
  recorded Acquisition or Acquisition with Feeback sessions
Comment
  Step 2: Change "Spatial filter configuration" to a
  CSP saved from Train CSP
  (i.e. Kyl014_Trn1_6D_CSP.cfg)
Comment
  Step 3: Change "Filename to load configuration from"
  to a LDA classifier saved from Train Classifier
  (i.e. Kyl014_Trn1_LDA.cfg)
Comment
  Step 4: Run scenario

Generic stream reader => #0
  Filename = ${Path_Save}/${Experiment}_${Participant}_Sess${Session_nb}_raw_online.ov
#0.Output stream 2 -> Channel Selector
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Index
-> Signal Decimation
  Decimation factor = 4
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 5
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
#0.Output stream 3 -> Switch director => #4
  Lua Script = ${Path_Project}/motor-imagery-bci-epoch-selector.lua
  offset = 0.5
  duration = 4
Triggers=#4, Matrix=#3 -> Stream Switch => #5
  Default to output 1 = false
  Switch stim for output 1 = OVTK_GDF_Correct
  Switch stim for output 2 = OVTK_GDF_Incorrect
#5.Output -> CSP Spatial Filter
  Spatial Filter Coefficients = 2.703847e-001 -2.033485e-001 2.403200e-001 2.356385e-001 3.924334e-001 2.392066e-001 1.127002e-001 5.732516e-001 3.104992e-001 2.895371e-001 1.986914e-001 -2.802680e-001 8.642486e-002 -2.668905e-001 -2.873133e-001 -3.079680e-001 -2.311904e-001 -3.049968e-001 -3.204301e-001 -4.425807e-001 -2.982545e-001 -3.624581e-001 -1.744479e-002 -7.034878e-001 -5.995533e-003 -1.229489e-001 1.247895e-001 2.070440e-002 6.842287e-002 -2.541404e-001 -2.561868e-001 -3.879915e-001 4.338307e-001 1.443247e-001 3.069893e-001 3.027873e-001 3.956776e-001 2.813833e-001 2.775941e-001 3.539172e-001 2.829927e-001 3.027860e-001 3.108204e-001 2.946543e-001 8.225412e-001 2.972170e-001 1.898263e-001 2.250992e-001 1.687568e-001 -1.534859e-001 -2.300909e-001 4.962294e-002 1.434820e-001 1.137746e-001 8.609021e-002 2.163431e-001 2.683773e-001 3.076638e-001 3.600542e-001 3.077418e-001 2.519831e-001 2.256527e-001 3.292362e-001 2.892913e-001 3.994603e-001 3.099987e-001
  Number of Output Channels = 6
  Number of Input Channels = 11
  Filter matrix file =
  0x8d21ff41 = ${Path_Save}/${Experiment}_${Participant}_Sess${Session_nb}_csp.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Signal Power Log
-> Feature aggregator => #9
Features=#9 -> Classifier processor => #10
  Filename to load configuration from = ${Path_Save}/${Experiment}_${Participant}_Sess${Session_nb}_lda.cfg
#0.Output stream 3 -> Identity => #11
-> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Pause
#11 -> Identity => #13
Stimulations=#13, Amplitude=#10.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#13 -> Stimulation Filter => #15
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
  Action to perform(1) = Select
  Stimulation range begin(1) = OVTK_GDF_Right
  Stimulation range end(1) = OVTK_GDF_Right
Targets=#15, Classification results=#10.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
-> Matrix Display "Confusion Matrix"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Targets=#15, LDA=#10.Labels -> Accuracy Measure
