OpenViBE-Scenario
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Step 1: Ensure that OpenViBE Acquisition Server
   is running and broadcasting data
Comment
  Step 2: Change "Filename" to where
  you want to save the experiment data
  (i.e. Kyl014_Exp1.ov)
Comment
  Step 3: Change "Spatial filter configuration" to a
  CSP saved from Train CSP
  (i.e. Kyl014_Trn1_6D_CSP.cfg)
Comment
  Solaiman Shokur -- Feb 20 2017
  WAP Online -- OpenViBE Client

  16 chan EEG recording and decoding in real time for SLC, SSL, FSL and LSL experiments.
Comment
  Step 6: Change "Filename"
  to where you want save your classifier data
  (i.e. Kyl014_Clas1.csv)
Comment
  Step 8: Run scenario
Comment
  Step 7: Change "Filename to load configuration from"
  to a LDA classifier saved from Train Classifier
  (i.e. Kyl014_Trn1_LDA.cfg)

Generic stream reader => #0
  Filename = X:/918SY/2018/03_Mar/13/1660/918SY_16ch_ARMS_1660_Trn1_2018.03.13_14.25.34.ov
#0.Output stream 2 -> Channel Selector
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Index
-> Signal Decimation
  Decimation factor = 20
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#3 -> Identity => #4
#4.Output stream 1 -> CSP Spatial Filter
  Spatial Fitler Coefficients = 3.079998e-002 5.442796e-002 -8.497731e-002 2.437687e-003 -3.427329e-002 -1.076832e-001 -7.257886e-002 7.123859e-002 -2.425087e-001 7.784728e-001 2.226152e-001 -1.423053e-001 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-2.727350e-002
  Number of Output Channels = 6
  Number of Input Channels = 16
  0x8d21ff41 = X:/918SY/2018/03_Mar/13/1660/918SY_16ch_ARMS_1660_Trn1_CSP
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #11
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = X:/918SY/2018/03_Mar/13/1660/918SY_16ch_ARMS_1660_Trn1_LDA
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
Signal=#3 -> Signal display "EEG"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Time signal => #13
  Sampling frequency = 100
  Generated epoch sample count = 1
Input 1=#13, Input 2=#11.Classification state, Input 3=#13 -> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog
