OpenViBE-Scenario
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Step 1: Change "Filename" to the
  EEG data recorded from Acquisition
  (i.e. Kyl014_Trn1.ov)
Comment
  WAP Team -- Oct 16 2013
  WAP Training -- Replay

  Optional: Used to view the LDA classifier and confusion matrix of
  recorded Acquisition or Acquisition with Feeback sessions
Comment
  Step 2: Change "Spatial filter configuration" to a
  CSP saved from Train CSP
  (i.e. Kyl014_Trn1_6D_CSP.cfg)
Comment
  Step 3: Change "Filename to load configuration from"
  to a LDA classifier saved from Train Classifier
  (i.e. Kyl014_Trn1_LDA.cfg)
Comment
  Step 4: Run scenario

Generic stream reader => #0
  Filename = C:/Users/pesquisador/Desktop/data_patients/918SY/918SY_testFSL_001_BarTrn2_2017.05.12_17.58.35.ov
#0.Output stream 2 -> Channel Selector
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Index
-> Signal Decimation
  Decimation factor = 20
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#3, Input stream 2=#0.Output stream 3 -> Identity => #4
#4.Output stream 1 -> CSP Spatial Filter
  Spatial Fitler Coefficients = -8.846940e-002 -2.810227e-002 2.313744e-001 2.385578e-001 -7.739910e-002 -2.664546e-002 -4.303717e-002 -7.766866e-002 -2.048078e-001 1.635678e-001 2.433613e-001 -1.018378e-001 8.804846e-002 8.824548e-002 -7.927009e-001 2.900750e-001 4.430162e-002 2.993951e-003 -4.480395e-002 3.966046e-001 -2.963439e-002 -5.542486e-002 1.346281e-002 3.560004e-001 5.146277e-002 7.902757e-004 -8.295719e-001 5.284199e-002 9.896900e-002 -1.671545e-002 -6.443057e-002 1.307039e-003 -1.542570e-001 2.806106e-003 -1.248895e-001 6.597977e-001 2.260559e-001 1.891548e-002 1.071014e-001 -6.126133e-001 -1.100057e-001 -1.261946e-001 2.168229e-002 -1.301624e-002 -1.655386e-001 2.542632e-002 1.704403e-001 3.572683e-002 -2.174258e-002 6.204381e-001 -1.871489e-001 -1.862114e-001 -6.558508e-002 2.952623e-001 -4.375840e-001 -9.049048e-002 -1.284726e-002 2.833769e-002 -9.604806e-002 3.027007e-001 -1.468915e-001 2.773067e-001 -2.270395e-001 -4.348340e-002 1.124010e-001 -8.934205e-002 -2.898440e-001 2.252407e-001 2.076653e-001 3.105329e-001 -3.034111e-001 -1.091445e-001 -1.994810e-001 -1.665330e-002 2.744550e-002 6.995932e-001 -1.335900e-001 -1.851267e-001 -1.364807e-001 -1.075516e-002 -3.078606e-001 -3.658549e-003 8.294652e-002 1.625455e-001 -4.684277e-001 4.201054e-002 1.271936e-001 -8.716529e-002 5.843365e-001 -4.368474e-002 1.465507e-001 1.235393e-001 1.192161e-001 -3.627648e-001 -2.948745e-001 1.186747e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  0x8d21ff41 = C:/WAP_DATA/103CO/103CO_LSL_1458_Trn1_CSP
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
#4.Output stream 2 -> Switch director => #11
  Lua Script = C:/WAP_SOFTWARE/OpenVibe_032018/supplemental/motor-imagery-bci-epoch-selector.lua
  offset = 0.5
  duration = 4.0
Triggers=#11, Matrix=#10 -> Stream Switch => #12
  Default to output 1 = false
  Switch stim for output 1 = OVTK_StimulationId_Label_00
  Switch stim for output 2 = OVTK_StimulationId_Label_01
#12.Output[0] -> Classifier processor => #13
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = C:/WAP_DATA/103CO/103CO_LSL_1458_Trn1_LDA
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
Stimulations=#4.Output stream 2, Amplitude=#13.Classification state -> Graz visualization
  Show instruction = true
  Show feedback = true
#4.Output stream 2 -> Stimulation Filter => #15
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Right
  Stimulation range end = OVTK_GDF_Right
Targets=#15, LDA=#13.Labels -> Accuracy Measure
Targets=#15, Classification results=#13.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
-> Matrix Display "Confusion Matrix"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false

Simple DSP "With SVM: x-0.5"
  Equation = x-0.5
