OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The Graz Visualization box will send the timeline
  markers directly to Acquisition Server using the
  TCP Tagging plugin. The server will then attach them
  appropriately to the EEG stream.
Comment
  Overview

  This scenario can be used as a first
  step to collect some training data. Those
  data will later be used to train a classifier
  for online use.

  When you start this scenario, just wait 40
  seconds before it starts the instruction sequence.

  You will then be presented left / right arrows to
  let you imagine left / right hand movements.
  There will be 20 arrows of each side.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  Note: It is always a good idea to
  monitor the signals during an experiment

Graz Motor Imagery BCI Stimulator => #0
  Lua Script = C:/Users/seidi/Documents/GitHub/real-time-bmi/mi processing v2/scripts/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 15
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.25
  Feedback Duration (in sec) = 3.75
  End of Trial Minimum Duration (in sec) = 1.5
  End of Trial Maximum Duration (in sec) = 3.5
Stimulations=#0 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream=#2.Signal stream, Stimulations stream=#0 -> CSV File Writer
  Filename = C:/Users/seidi/Desktop/record-[$core{date}-$core{time}]-seidi-mi-hands.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#2.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
