OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Comment
  Script Box de Python para processamento simples ( 1 sinal de entrada e 1 sinal de saída)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector => #1
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 30
-> Time based epoching => #3
  Epoch duration (in sec) = 2
  Epoch intervals (in sec) = 0.1
-> Classifier Process => #4
  Clock frequency (Hz) = 128
  Script = ${Path_Project}/mi processing v3/scripts/real_time_processing.py
-> Raw MQTTT Output
  Clock frequency (Hz) = 20
  Script = ${Path_Project}/rawmqttOutput.py
  MQTTHost = localhost
  MQTTPort = 1883
  topic = PCA_values
Data=#3 -> Signal display "Saída"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Graz Motor Imagery BCI Stimulator => #7
  Lua Script = ${Path_Project}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 10
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 1
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.25
  Feedback Duration (in sec) = 6
  End of Trial Minimum Duration (in sec) = 1.5
  End of Trial Maximum Duration (in sec) = 3.5
Input stream=#1, Stimulations stream=#7 -> CSV File Writer
  Filename = ${Path_Save}/${Experiment}_2classes_${Participant}_Sess${Session_nb}_online.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Stimulations=#7 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
Input stream=#4, Stimulations stream=#7 -> CSV File Writer
  Filename = ${Path_Save}/${Experiment}_2classes_${Participant}_Sess${Session_nb}_online_classifier.csv
  Precision = 10
  Append data = false
  Only last matrix = false
