OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 50
-> Time based epoching
  Epoch duration (in sec) = 0.5
  Epoch intervals (in sec) = 0.5
-> ASR Processor => #3
  Filename to load model = C:/Users/seidi/Desktop/ASR-model.xml
Keyboard stimulator => #4
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Input stream=#3.Output Signal, Stimulations stream=#4 -> CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input stream=#0.Signal stream, Stimulations stream=#4 -> CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
