OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Graz Motor Imagery BCI Stimulator => #2
  Lua Script = C:/Users/seidi/Desktop/graz_config.txt
  Number of Trials for Each Class = 10
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.25
  Feedback Duration (in sec) = 3.75
  End of Trial Minimum Duration (in sec) = 1.5
  End of Trial Maximum Duration (in sec) = 3.5
  Third Class = OVTK_GDF_Left_Hand_Movement
  Fourth Class = OVTK_GDF_Right_Hand_Movement
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#2 -> Generic stream writer
  Filename = C:/Users/seidi/Desktop/seidi_mi_4classes.ov
  Use compression = false
#2 -> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_GDF_End_Of_Trial
  Cue Image 1 = C:/Users/seidi/Desktop/left_hand.png
  Stimulation 1 = OVTK_GDF_Left
  Cue Image 2 = C:/Users/seidi/Desktop/left_arm.png
  Stimulation 2 = OVTK_GDF_Left_Hand_Movement
  Cue Image 3 = C:/Users/seidi/Desktop/right_hand.png
  Stimulation 3 = OVTK_GDF_Right
  Cue Image 4 = C:/Users/seidi/Desktop/right_arm.png
  Stimulation 4 = OVTK_GDF_Right_Hand_Movement
  Cue Image 5 = C:/Program Files/openvibe-3.5.0-64bit/share/openvibe/plugins/simple-visualization/graz/rest.png
  Stimulation 5 = OVTK_GDF_Cross_On_Screen
