OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renard
0x9f5c4075 = Signal Monitoring
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  WAP Team -- May 2023
  WAP Training -- Signal Monitoring

  Optional: Used to check that signals are being
  received from the EEG amplifier
Comment
  Step 1: Ensure that OpenViBE Acquisition Server
   is running and broadcasting data
Comment
  Step 2: Run scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Index
-> Signal Decimation
  Decimation factor = 4
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Spectral analysis => #5
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#5.Amplitude -> Power spectrum display
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#3 -> Signal display "EEG Filtered Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#0.Signal stream -> Signal display "EEG Raw Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
