OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
0x790d75b8 = Anthony Lin
0x9f5c4075 = WAP Training -- Acquisition

CSV File Reader => #0
  Filename = C:/Users/seidi/Desktop/Data/RF112/RIEMANN_LDA_screening_2_classes_mi_RF112_Sess1_Run1.csv
#0.Output stream -> Channel Selector
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Index
-> Signal Decimation
  Decimation factor = 4
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
Input stream=#0.Output stream, Stimulations stream=#0.Output stimulation -> CSV File Writer
  Filename = ${Filename}
  Precision = 10
  Append data = false
  Only last matrix = false
Graz Motor Imagery BCI Stimulator => #5
  Lua Script = ${Path_Project}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
-> Player Controller
  Stimulation name = OVTK_StimulationId_Train
  Action to perform = Stop
Data=#3, Stimulations=#5 -> Signal display "EEG Filtered Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Stimulations=#5 -> Graz visualization
  Show instruction = true
  Show feedback = false
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
