OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

CSV File Reader => #0
  Filename = C:/Users/seidi/Documents/GitHub/real-time-bmi/mi processing v4/test_data/RIEMANN_PCA_4classes_SY100_Sess2.csv
Input stream=#0.Output stream, Stimulations stream=#0.Output stimulation -> CSV File Writer
  Filename = ${Filename}
  Precision = 10
  Append data = false
  Only last matrix = false

Graz Motor Imagery BCI Stimulator => #2
  Lua Script = ${Path_Project}mi processing v3/scripts/graz_config.txt
  Number of Trials for Each Class = 10
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.25
  Feedback Duration (in sec) = 3.75
  End of Trial Minimum Duration (in sec) = 1.5
  End of Trial Maximum Duration (in sec) = 3.5
  Third Class = OVTK_GDF_Left_Hand_Movement
  Fourth Class = OVTK_GDF_Right_Hand_Movement
-> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_GDF_End_Of_Trial
  Cue Image 1 = ${Path_Project}mi processing v4/stimuli/left_hand.png
  Stimulation 1 = OVTK_GDF_Left
  Cue Image 2 = ${Path_Project}mi processing v4/stimuli/left_arm.png
  Stimulation 2 = OVTK_GDF_Left_Hand_Movement
  Cue Image 3 = ${Path_Project}mi processing v4/stimuli/right_hand.png
  Stimulation 3 = OVTK_GDF_Right
  Cue Image 4 = ${Path_Project}mi processing v4/stimuli/right_arm.png
  Stimulation 4 = OVTK_GDF_Right_Hand_Movement
  Cue Image 5 = C:/Program Files/openvibe-3.5.0-64bit/share/openvibe/plugins/simple-visualization/graz/rest.png
  Stimulation 5 = OVTK_GDF_Cross_On_Screen
#2 -> Player Controller
  Stimulation name = OVTK_StimulationId_Train
  Action to perform = Stop
