OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
0x790d75b8 = Anthony Lin
0x9f5c4075 = WAP Training -- Acquisition

CSV File Reader => #0
  Filename = C:/Users/seidi/Documents/GitHub/real-time-bmi/mi processing v4/test_data/motor_mi_EG102_online_6d.csv
#0.Output stream -> Channel Selector
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Index
-> Signal Decimation
  Decimation factor = 4
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
Data=#3 -> Signal display "EEG Filtered Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Stimulations stream=#0.Output stimulation -> CSV File Writer
  Filename = ${Filename}
  Precision = 10
  Append data = false
  Only last matrix = false
