OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

CSV File Reader => #0
  Filename = C:/Users/seidi/Desktop/Data/RF112/RIEMANN_LDA_screening_4_classes_mi_RF112_Sess1_Run1.csv
#0.Output stream -> Channel Selector
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 35
-> Time based epoching => #3
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Classifier Process
  Clock frequency (Hz) = 128
  Script = ${Path_Project}/mi processing v4/scripts/real_time_processing.py
  data_train = ${data_train}
-> Raw MQTTT Output
  Clock frequency (Hz) = 20
  Script = ${Path_Project}/rawmqttOutput.py
  MQTTHost = localhost
  MQTTPort = 1883
  topic = PCA_values
Data=#3 -> Signal display "Saída"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Output stimulation -> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_GDF_End_Of_Trial
  Cue Image 1 = ${Path_Project}mi processing v4/stimuli/left_hand.png
  Stimulation 1 = OVTK_GDF_Left
  Cue Image 2 = ${Path_Project}mi processing v4/stimuli/left_arm.png
  Stimulation 2 = OVTK_GDF_Left_Hand_Movement
  Cue Image 3 = ${Path_Project}mi processing v4/stimuli/right_hand.png
  Stimulation 3 = OVTK_GDF_Right
  Cue Image 4 = ${Path_Project}mi processing v4/stimuli/right_arm.png
  Stimulation 4 = OVTK_GDF_Right_Hand_Movement
  Cue Image 5 = C:/Program Files/openvibe-3.5.0-64bit/share/openvibe/plugins/simple-visualization/graz/rest.png
  Stimulation 5 = OVTK_GDF_Cross_On_Screen
