OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

CSV File Reader => #0
  Filename = C:/Users/seidi/Documents/GitHub/real-time-bmi/mi processing v4/test_data/motor_mi_EG102_online_6d.csv
#0.Output stream -> Signal Decimation
  Decimation factor = 4
-> Channel Selector
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
-> Time based epoching => #4
  Epoch duration (in sec) = 2
  Epoch intervals (in sec) = 0.1
-> Classifier Process
  Clock frequency (Hz) = 128
  Script = ${Path_Project}/mi processing v4/scripts/real_time_processing.py
  data_train = ${data_train}
-> Raw MQTTT Output
  Clock frequency (Hz) = 20
  Script = ${Path_Project}/rawmqttOutput.py
  MQTTHost = localhost
  MQTTPort = 1883
  topic = PCA_values
Data=#4 -> Signal display "Saída"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Graz Motor Imagery BCI Stimulator => #8
  Lua Script = ${Path_Project}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 10
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 10
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Input stream=#0.Output stream, Stimulations stream=#8 -> CSV File Writer
  Filename = ${Filename}
  Precision = 10
  Append data = false
  Only last matrix = false
Stimulations=#8 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#8 -> Player Controller
  Stimulation name = OVTK_StimulationId_Train
  Action to perform = Stop
