OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Douglas M. Dunga
0x8c1fc55b = 01
0x9f5c4075 = Python Script Processor
0xf8034a49 = ISD
Comment
  Script Box de Python para processamento simples ( 1 sinal de entrada e 1 sinal de saída)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Signal Decimation
  Decimation factor = 4
-> Channel Selector "1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16"
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 30
-> Time based epoching
  Epoch duration (in sec) = 2
  Epoch intervals (in sec) = 0.1
-> esqueleton_proc => #5
  Clock frequency (Hz) = 128
  Script = ${Player_ScenarioDirectory}/scripts/r05_skeleton_process.py
Data=#5 -> Signal display "Saída"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream=#5 -> CSV File Writer
  Filename = C:/Users/Laboratorio/Desktop/classifier_output.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Data=#3 -> Signal display "Entrada"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Generic stream reader => #9
  Filename = C:/Users/Laboratorio/Desktop/motor_mi_AL106_online_6d.ov
Stimulations=#9.Output Stimulations -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false

Sinus generator
  Clock frequency (Hz) = 32
  Script = ${Player_ScenarioDirectory}/scripts/python-gerador_sinais.py
  Channel count = 16
  Sampling frequency = 512
  Generated epoch sample count = 32
